PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001', 'practiceRT': '.5', 'trial Order': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = MID
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        rt_list = []
        probeDur = float(expInfo['practiceRT'])
        Trials = 0
      Begin Routine:
        feedbackDur = 2 - probeDur
      End Routine:
        if probeResp.corr is 1:
           rt_list.append(probeResp.rt)

        # Trial counter
        Trials = Trials + 1

        #bthisExp.addData('probeDur', probeDur)
        thisExp.addData('feedbackDur', feedbackDur)
        thisExp.addData('rt_list', rt_list)
        thisExp.addData('Trial counter', Trials)
    ImageComponent Target
      image [set every repeat] = "images/" + $cond_dict[Condition][6]
      size = (1.3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probeDur
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    KeyboardComponent probeResp
      allowedKeys = '1'
      correctAns = 1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = probeDur
      storeCorrect = True
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  Routine cue
    ImageComponent cueImage
      image [set every repeat] = 'images/' + $cond_dict[Condition][7]
      size = (1.3, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine instruct
    ImageComponent instructFig
      image = images/MID_instructions.bmp
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent ready
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent CalcProbeDur
      Code Type = Py
      Begin Experiment:
        UserAcc = []
        NonNeutralTrialsNum = 0
        AdjTrial = 0
        AdjTrialInc = 3
        AdjUserRT = probeDur
        Acc = 0
        meanrt = 0
        percentacc = 0
        n_correct = 0
        UserPercentAcc = ''
        prevAcc = ''
      Begin Routine:
        TrialType = cond_dict[Condition][0]

        n_correct = n_correct + probeResp.corr
        percentacc_total = n_correct/Trials*100

        print(percentacc_total)

        rt_array = np.array(rt_list)
        meanrt = rt_array.mean()


        if TrialType != 3:
            NonNeutralTrialsNum = NonNeutralTrialsNum + 1 # counter of non-neutral (incentivized) trials

            UserAcc.append(probeResp.corr)
            UserAcc_array = np.array(UserAcc)

        # The probe duration is adjusted every three trials starting at trial 7.
        # Acc is calculated using only non-neutral trial types.

        # the task difficulty is adjusted over the course of the task after every
        # third incentivized trial based on the overall accuracy rate of the previous six trials

            if NonNeutralTrialsNum is AdjTrial + AdjTrialInc:
                UserPercentAcc = UserAcc_array.sum()/3*100

                if NonNeutralTrialsNum is 3:
                    Acc = UserPercentAcc
                else:
                    Acc = (UserPercentAcc + prevAcc)/2

                AdjRTmsg="Adjusting RT..."
                print(AdjRTmsg)
                thisExp.addData('AdjRTmsg', AdjRTmsg)
                print("Acc: ", Acc)

                # adaptive RT adjustment
                if Acc < 5:
                    AdjUserRT = AdjUserRT + .070
                elif Acc < 15:
                    AdjUserRT = AdjUserRT + .060
                elif Acc < 25:
                    AdjUserRT = AdjUserRT + .050
                elif Acc < 35:
                    AdjUserRT = AdjUserRT + .040
                elif Acc < 45:
                    AdjUserRT = AdjUserRT + .030
                elif Acc < 55:
                    AdjUserRT = AdjUserRT + .020
                elif Acc > 95:
                    AdjUserRT = AdjUserRT - .050
                elif Acc > 85:
                    AdjUserRT = AdjUserRT - .040
                elif Acc > 75:
                    AdjUserRT = AdjUserRT - .030
                elif Acc > 65:
                    AdjUserRT = AdjUserRT - .020

                UserAcc = []
                prevAcc = UserPercentAcc
                print("prevAcc: ", prevAcc)
                print("previous RT was: ", probeDur)
                print("new RT is: ", AdjUserRT)

                AdjTrial = NonNeutralTrialsNum
                probeDur = AdjUserRT


        if meanrt > 0:
            meanrt = meanrt

        # ensure that probe dur is between 150ms and 500ms
        if probeDur > .5:
            probeDur = .5
            AdjUserRT = probeDur
        elif probeDur < .15:
            probeDur = .15
            AdjUserRT = probeDur
      End Routine:
        thisExp.addData('TrialType', TrialType)
        thisExp.addData('NonNeutralTrialsNum', NonNeutralTrialsNum)
        thisExp.addData('probeDur', probeDur)
        thisExp.addData('percentacc_total', percentacc_total)
        thisExp.addData('meanrt', meanrt)


        #tmp
        thisExp.addData('UserAcc', UserAcc)
        thisExp.addData('Acc', Acc)
        thisExp.addData('AdjTrial', AdjTrial)
        thisExp.addData('AdjTrialInc', AdjTrialInc)


        print("Trial Type: ", TrialType, ", UserPercentAcc: ", UserPercentAcc, ", Acc: ", Acc, ", prevAcc: ", prevAcc, ", probeAcc: ", probeResp.corr, "meanrt :", meanrt, ", NonNeutralTrialsNum", NonNeutralTrialsNum, ", Trials: ", Trials, ", probeResp.rt: ", probeResp.rt, ", AdjUserRT: ", AdjUserRT, ", probeDur: ", probeDur)
    CodeComponent feedbackCode
      Code Type = Py
      Begin Experiment:
        msg=''
        respCheck=''
        msgEarnings =''
        TrackEarnings = 0

        # "TrialCondition": [TrialType, TrialEarning_corr, TrialEarning_incorr, TrialEarning_msg, CorrectMessage, IncorrectMessage, CueImage, ProbeImage]
        cond_dict = {
            "LgReward": [1, 5, 0, 5, "You won", "You did not win", 'WinProbe.bmp', 'WinBig.bmp'],
            "SmallReward": [2, .2, 0, .2, "You won", "You did not win", 'WinProbe.bmp', 'WinSmall.bmp'],
            "LgPun": [4, 0, -5, 5, "You did not lose", "You lost", 'LoseProbe.bmp', 'LoseBig.bmp'],
            "SmallPun": [5, 0, -.2, .2, "You did not lose", "You lost", 'LoseProbe.bmp', 'LoseSmall.bmp'],
            "Triangle": [3, 0, 0, 0, "You did not win or lose anything!", "You did not win or lose anything!", 'NeutralProbe.bmp', 'Neutral.bmp'],
        }
      Begin Routine:
        if fixationResp.keys != None:
            respCheck = "You pressed too soon!"
            probeResp.corr == 0 # override probe response since subject pressed too soon
            probeResp.rt == 0 # override probe response since subject pressed too soon
        elif probeResp.keys == '1':
            respCheck = "Correct Response!"

        else:
            respCheck = "You pressed too slow!"


        if Condition == "Triangle":
            msg = cond_dict[Condition][4]
            TrialEarning = 0
        elif probeResp.corr == 1:
            msg = cond_dict[Condition][4] + " $%.2f!" % cond_dict[Condition][3]
            TrialEarning = cond_dict[Condition][1]
        else:
            msg = cond_dict[Condition][5] + " $%.2f!" % cond_dict[Condition][3]
            TrialEarning = cond_dict[Condition][2]

        TrackEarnings = TrackEarnings + TrialEarning
        msgEarnings = "Total Earnings: $%.2f!" % TrackEarnings

        thisExp.addData('msg', msg)
        thisExp.addData('TrackEarnings', TrackEarnings)
    TextComponent feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = feedbackDur
      text [set every repeat] = $respCheck + '\n\n' + $msg
      wrapWidth = 2
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  Routine DisplayMoney
    CodeComponent dispMoney
      Code Type = Py
      Begin Routine:
        msgEarnings = "You earned a total of: $%.2f!" % TrackEarnings
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $msgEarnings
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  Routine scanTrigger
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for scanner trigger...
      wrapWidth = 2
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    KeyboardComponent scanTriggerKey
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_2
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        # Fixation Dur is defined in the TimeVersion csv file
        FixationDur=''
      End Routine:
        thisExp.addData('FixationDur', FixationDur/1000)
    PolygonComponent fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FixationDur/1000
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    KeyboardComponent fixationResp
      allowedKeys = ['1','2','space']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FixationDur/1000
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  Routine PrepTime
    PolygonComponent PrepFixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent TrialOrder
      Code Type = Py
      Begin Experiment:
        TrialOrders = {
        1: ["TimeVersion5", "TimeVersion16"],
        2: ["TimeVersion13", "TimeVersion1"],
        3: ["TimeVersion9", "TimeVersion14"],
        4: ["TimeVersion15", "TimeVersion12"],
        5: ["TimeVersion6", "TimeVersion5"],
        6: ["TimeVersion8", "TimeVersion11"],
        7: ["TimeVersion2", "TimeVersion9"],
        8: ["TimeVersion3", "TimeVersion8"],
        9: ["TimeVersion10", "TimeVersion2"],
        10: ["TimeVersion7", "TimeVersion13"],
        11: ["TimeVersion11", "TimeVersion7"],
        12: ["TimeVersion4", "TimeVersion3"],
        }
      End Routine:
        if run.nRemaining is 1:
            run=1
        elif run.nRemaining is 0:
            run=2

        TrialOrder = TrialOrders[float(expInfo['trial Order'])][run-1] + ".csv"
        print("trial order is: ", TrialOrder)
  Routine code_5
  Routine calcRT
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        OverallRT=''
      Begin Routine:
        # Not sure purpose of OverallRT
        """
        if probeResp.keys is not None:
            OverallRT = probeResp.rt

        elif len(TextDisplay1.RESP) > 0 Then

         OverallRT = c.GetAttrib("ProbeTime") + TextDisplay1.RT

        ElseIf Len(Feedback.RESP) > 0 Then

         C.SetAttrib "OverallRT", c.GetAttrib("ProbeTime") + TextDisplay1.Duration + Feedback.RT
        """
  Routine endFix
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine outputVars
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        fname_earnings = subID + '_' + runNum + '_Earnings.txt'
        f = open( fname_earnings, 'w' )
        f.write( TrackEarnings )
        f.close()

        fname_RT= subID + '_' + runNum + '_RT.txt'
        f = open( fname_RT, 'w' )
        f.write( probeDur )
        f.close()
Flow
  LoopInitiator run loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine instruct
    Routine scanTrigger
    Routine PrepTime
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $TrialOrder
      loopType = sequential
      nReps = 1
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      Routine cue
      Routine fixation_2
      Routine trial
      Routine feedback
      Routine calcRT
    LoopTerminator trials
    Routine outputVars
  LoopTerminator run
  Routine endFix
  Routine DisplayMoney
