PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = scanner
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = PEER
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Routines
  Routine trial2
    PolygonComponent dot
      fillColor = $[1,1,1]
      lineColor = $[0,0,0]
      nVertices = 100
      pos [set every repeat] = $(PX, PY)
      saveStartStop = False
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = pix
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  Routine trial2_2
    PolygonComponent polygon
      fillColor = $[1,1,1]
      nVertices = 100
      pos = (691, 432)
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine endFix
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine instruct
    TextComponent text
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Stay focused on the
        white fixation circle
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dot_coordinates_scanner_display.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('PX', 0.0), ('PY', 0.0)]),
      OrderedDict([('PX', 691.2), ('PY', 432.0)]),
      OrderedDict([('PX', 0.0), ('PY', -432.0)]),
      OrderedDict([('PX', -864.0), ('PY', 345.6)]),
      OrderedDict([('PX', 864.0), ('PY', 345.6)]),
      OrderedDict([('PX', -864.0), ('PY', 432.0)]),
      OrderedDict([('PX', -604.8), ('PY', 129.6)]),
      OrderedDict([('PX', -259.2), ('PY', 302.4)]),
      OrderedDict([('PX', -864.0), ('PY', -345.6)]),
      OrderedDict([('PX', -691.2), ('PY', 432.0)]),
      OrderedDict([('PX', -691.2), ('PY', -432.0)]),
      OrderedDict([('PX', 864.0), ('PY', -432.0)]),
      OrderedDict([('PX', -259.2), ('PY', -302.4)]),
      OrderedDict([('PX', -864.0), ('PY', -432.0)]),
      OrderedDict([('PX', 864.0), ('PY', 432.0)]),
      OrderedDict([('PX', 259.2), ('PY', 302.4)]),
      OrderedDict([('PX', 604.8), ('PY', -129.6)]),
      OrderedDict([('PX', 691.2), ('PY', -432.0)]),
      OrderedDict([('PX', 0.0), ('PY', 0.0)]),
      OrderedDict([('PX', -604.8), ('PY', -129.6)]),
      OrderedDict([('PX', 0.0), ('PY', 432.0)]),
      OrderedDict([('PX', 864.0), ('PY', -345.6)]),
      OrderedDict([('PX', 259.2), ('PY', -302.4)]),
      OrderedDict([('PX', -864.0), ('PY', 0.0)]),
      OrderedDict([('PX', 864.0), ('PY', 0.0)]),
      OrderedDict([('PX', 0.0), ('PY', 0.0)]),
      OrderedDict([('PX', 604.8), ('PY', 129.6)])]
    Routine trial2
  LoopTerminator trials
