PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = rest
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Routines
  Routine instruct
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please relax, stay still, and look at the plus sign.

        Feel free to blink or move your eyes.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine scanTrigger
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for scanner trigger...
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    KeyboardComponent scanTriggerKey
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine done
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = All done!
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Flow
  Routine instruct
  Routine scanTrigger
  Routine fix
  Routine done
